CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_lp.tif")
    Name to assign these images:lp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "marker")
    Name to assign these images:AF488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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notes:['Initial smoothing filter- helps better define bacterial cell edges']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
    Select the input image:lp
    Name the output image:smoothedlp
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify bacterial cells as primary objects']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
    Select the input image:smoothedlp
    Name the primary objects to be identified:legi
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:7|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notes:['Spuriously split bacterial cell objects are remerged in this step']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
    Select the input objects:legi
    Name the new objects:mergedlegi
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ExpandOrShrinkObjects:[module_num:8|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notes:['Shrink by 1 pixel - improved secondary object generation in next step']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
    Select the input objects:mergedlegi
    Name the output objects:shrunkenlegi
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Propagate secondary object from legi to find region positive for protein of interest']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
    Select the input objects:shrunkenlegi
    Name the objects to be identified:AF488
    Select the method to identify the secondary objects:Propagation
    Select the input image:AF488
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:10|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notes:['Relate objects to link positive region to parent LCV']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
    Parent objects:AF488
    Child objects:mergedlegi
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:11|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notes:['Measure area of positive region and original LCV object (not shrunken)']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
    Select object sets to measure:AF488, mergedlegi
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240827_REP3_Rabex5Rabaptin5_area
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:13|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notes:['Overlay outlines for QC checks if desired']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:AF488
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:mergedlegi
    Select outline color:Green
    Select objects to display:AF488

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF488
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
