CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Input: background subtracted Rab5 IF images paired with GFP images (EGFP only, GFP-Rabex5, GFP-Rabaptin5)']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "R5BGs")
    Name to assign these images:Rab5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "EGFP.tif")
    Name to assign these images:EGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find cell outline']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
    Select the input image:EGFP
    Name the primary objects to be identified:CellOutline
    Typical diameter of objects, in pixel units (Min,Max):100,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
SplitOrMergeObjects:[module_num:6|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notes:['Merge spuriously split objects']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
    Select the input objects:CellOutline
    Name the new objects:MergedCellOutline
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyPrimaryObjects:[module_num:7|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notes:['ID endosomes']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
    Select the input image:Rab5
    Name the primary objects to be identified:Rab5
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskObjects:[module_num:8|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notes:['Mask endosomes with cell outline']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
    Select objects to be masked:Rab5
    Name the masked objects:MaskedRab5
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MergedCellOutline
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:9|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notes:['Measure endosome area']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
    Select object sets to measure:MaskedRab5
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20241118_MaskedRab5ASize_FINAL
    Overwrite existing files without warning?:No
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